CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<base>.*)_mask.*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Mask': 'base', 'LabelImg': 'base'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "mask.tiff")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "label.tiff")
    Name to assign these images:LabelImg
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:LabelImg
    Name the output object:Label
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:2

Resize:[module_num:6|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
    Select the input image:Mask
    Name the output image:MaskImg2x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:MaskImg2x
    Name the output object:Mask2x
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Mask2x
    Name the output objects:Mask2xBorder
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Mask2xBorder
    Name the output image:Mask2xBorderImg
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Mask2x
    Name the output image:Mask2xImg
    Select the color format:uint16
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
TransformBinary:[module_num:11|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
    Select the input image:Mask2xBorderImg
    Name the transformed image:MaskDistance

RescaleIntensity:[module_num:12|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
    Select the input image:MaskDistance
    Name the output image:MaskDistanceRescaled
    Rescaling method:Divide each image by the same value
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    Divisor value:65535
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:LabelImg, MaskDistance, MaskDistanceRescaled, Mask2xImg
    Select objects to measure:Label

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Label, Mask2x
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Mask2x
    Select neighboring objects to measure:Mask2x
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:16|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
    Parent objects:Mask2x
    Child objects:Label
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:17|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
    Parent objects:Label
    Child objects:Mask2x
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Label
    Name the output image:LabelObjImg
    Select the color format:uint16
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:LabelImg
    Select method for constructing file names:From image filename
    Select image name for file prefix:LabelImg
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Mask2xImg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mask
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:LabelObjImg
    Select method for constructing file names:From image filename
    Select image name for file prefix:LabelImg
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|masks
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:MaskDistanceRescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mask
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dist
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Mask2xBorderImg
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mask
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_border
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|imgs
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportVarCsv:[module_num:26|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
    Output file location:Default Output Folder|
    Add a prefix to file names?:No
    Filename prefix:var_
    Overwrite existing files without warning?:No
    Extraction method count:0

CreateBatchFiles:[module_num:27|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/vitoz
    Cluster root path:/home/vitoz
